/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "IOs":
    [
        {
            "name": "IO_1",
            "port": "fw",
            "protocol": "broadcast-query-read-write"
        }
        ,
        {
            "name": "IO_2",
            "port": "udpfw",
            "protocol": "broadcast-query-read-write"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "PSM",
            "type": "PSM",
            "IO": "IO_1",
      //      "IO_file": "/home/xle6/dvrk_teleop_data/sawRobotIO1394-PSM1-28007.xml",
            "serial": "28007",
            "pid": "/home/xle6/dvrk_teleop_data/sawControllersPID-PSM.json",
            "base_frame": {
                "reference_frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,         -0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "IO": "IO_1",
            "serial": "22723",
            "pid": "/home/xle6/dvrk_teleop_data/sawControllersPID-MTM.json",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "28247",
            "IO": "IO_1",
            "pid": "/home/xle6/dvrk_teleop_data/sawControllersPID-MTM.json",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTML2",
            "type": "MTM",
            "IO": "IO_2",
            "serial": "34863",
            "name_on_IO": "MTML",
            "arm_file": "/home/xle6/ros2_ws/src/dvrk/dvrk_config_jhu/jhu-daVinci/MTML-34863.json",
            //"pid": "/home/xle6/dvrk_teleop_data/sawControllersPID-MTM.json",
            "IO_file": "/home/xle6/ros2_ws/src/dvrk/dvrk_config_jhu/jhu-daVinci/sawRobotIO1394-MTML-34863.xml",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTMR2",
            "type": "MTM",
            "serial": "32336",
            "IO": "IO_2",
            "name_on_IO": "MTMR",
            "arm_file": "/home/xle6/ros2_ws/src/dvrk/dvrk_config_jhu/jhu-daVinci/MTMR-32336.json",
            //"pid": "/home/xle6/dvrk_teleop_data/sawControllersPID-MTM.json",
            "IO_file": "/home/xle6/ros2_ws/src/dvrk/dvrk_config_jhu/jhu-daVinci/sawRobotIO1394-MTML-32336.xml",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }

    ]
    ,
    "consoles":
    [
        {
            "name": "console1",
            "input_type": "PEDALS_ONLY",
            "IO_pedals" :
            {
                "IO": "IO_1",
                "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
            }
            ,
            "teleop_PSMs":
            [
                {
                    "MTM": "MTML",
                    "PSM": "PSM"
                }
                ,
                //{
                //    "MTM": "MTML",
                //    "PSM": "PSM"
                //}
                //,
                {
                    "MTM": "MTMR",
                    "PSM": "PSM"
                }
               // ,
               // {
               //     "MTM": "MTMR",
               //     "PSM": "PSM"
               // }
            ]
        }
        ,
        {
            "name": "console2",
            "input_type": "PEDALS_ONLY",
            "IO_pedals" :
            {
                "IO": "IO_2",
                "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
            }
            ,
            "teleop_PSMs":
            [
                {
                    "MTM": "MTML2",
                    "PSM": "PSM"
                }
                ,
                //{
                //    "MTM": "MTML",
                //    "PSM": "PSM"
                //}
                //,
                {
                    "MTM": "MTMR2",
                    "PSM": "PSM"
                }
               // ,
               // {
               //     "MTM": "MTMR",
               //     "PSM": "PSM"
               // }
            ]
        }
    ]
}
